PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = sounddevice
  Data filename = u'data/%s_%s_%s' % (expInfo['participantID'], expName, expInfo['name'])
  Experiment info = {'participantID': '0001', 'name': ''}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = [1280, 720]
  color = $[-1,-1,-1]
  expName = group3.1-3.2_social-tom
  keyboardBackend = ioHub
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Routines
  Routine opening1
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    CodeComponent initializing1
      Code Type = Auto->JS
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      Begin Experiment:
        # keep track of which run now is for Audio and Text condition, respectively
        nAudioRun = 1
        nTextRun = 1
        nInstruct = 0

        instructMes1 = """In this survey, you will listen to that voice reading out several narratives (short stories). After that, you will directly read additional narratives as their texts appear on the screen.

        You will be invited to rate your feelings, expectations, and other opinions about these stories. There are no right or wrong answers for these ratings.

        Press "space" to continue learning about the survey."""
        procedureImg1 = 'image/procedure_continuous.png'
        scaleImg1 = 'image/illustration_continuous.png'

        instructMes2 = """Every narrative is cut into **nine parts**. During each part, you will provide your ratings continuously at each moment, which are called **Continuous Ratings**. A slider will stay on the screen for the whole period of the narrative, as shown below (the left is when you listen to the narrative, and the right is when you read the narrative).

        Press "space" to continue, or press "p" to view the previous page.
        """
        procedureImg2 = 'image/procedure_continuous.png'
        scaleImg2 = 'image/illustration_continuous.png'

        instructMes3 = """To make continuous ratings, you would move your mouse on top of the slider, ***without clicking***. A blue circle will indicate the position of your current rating, as shown below. Please change your ratings whenever you feel something different. The ratings will start as the narrative starts and stop a short time after the narrative ends.

        Press "space" to continue, or press "p" to view the previous page."""
        procedureImg3 = 'image/procedure_continuous.png'
        scaleImg3 = 'image/illustration_continuous_circle.png'

        # select a continuous rating question and instruction based on sub ID
        parID = int(expInfo['participantID'])
        if parID%4 == 0 or parID%4 == 1:    # social
            instructMes4 = """The continuous ratings are about how much you think **there are social interactions** at each moment in the story. Social interactions are communications or mutual actions between two or more people. Sentences that contain only one person, or that contain two or more people who are not interacting, are not about social interactions. For example, this sentence DOES contain social interactions:
            "Linda told Amy about her situation."
        The following two sentences DO NOT contain social interactions:
            "Mark thought about his situation."
            "They are worried about their situation."

        Press "space" to continue, or press "p" to view the previous page."""
            continuousQ = "Are there social interactions?"
            label1 = "Not at all"
            label2 = "Partially"
            label3 = "Definitely yes"
            continuousQFull = "(How much do you think there are social interactions in the narrative at this moment?)"
            intQ = "On average, how much do you think there were social interactions during the last part of the narrative?"
            instructMes5 = """After each part of the story, you will answer another question about **on average**, how much you think there were social interactions in the last part of the story (see orange bar in the figure above).
        To help you get familiar with the task, at the beginning, one sample part of narrative will be used for practice.  After that, all the following parts will be the formal survey.

        Now please press "space" to begin practicing."""

        elif parID%4 == 2 or parID%4 == 3:    # tom
            instructMes4 = """The continuous ratings are about how much you are **thinking about the mental states** of characters in the narrative at each moment. Mental states refer to the characters’ thoughts, beliefs, and/or desires, but not about physical actions or sensations.
        For example, if you ARE thinking about mental states of characters, you may be considering “Is Bob angry?” or “Linda is planning on what to do.”
        If you are considering “Where is Dave heading?” or “Amy told Carl about her situation.”, you ARE NOT thinking about mental states.

        Press "space" to continue, or press "p" to view the previous page.  """
            continuousQ = "Thinking about mental states?"
            label1 = "Not at all"
            label2 = "Half the time"
            label3 = "All the time"
            continuousQFull = "(How much are you thinking about the mental states of characters in the narrative at this moment?)"
            intQ = "On average, how much were you thinking about the mental states of characters during the last part of the story?"
            instructMes5 = """After each part of the story, you will answer another question about **on average**, how much you were thinking about the mental states of characters (see orange bar in the figure above).
        To help you get familiar with the task, at the beginning, one sample part of narrative will be used for practice.  After that, all the following parts will be the formal survey.

        Now please press “space” to begin practicing."""

        procedureImg4 = 'image/procedure_continuous.png'
        scaleImg4 = 'image/illustration_continuous.png'

        procedureImg5 = 'image/procedure_continuous.png'
        scaleImg5 = 'image/illustration_continuous.png'

        instructMes = [instructMes1, instructMes2, instructMes3, instructMes4, instructMes5]
        procedureImg = [procedureImg1, procedureImg2, procedureImg3, procedureImg4, procedureImg5]
        scaleImg = [scaleImg1, scaleImg2, scaleImg3, scaleImg4, scaleImg5]
      Begin Routine:
        instructText1.alignText = 'left'
    TextComponent instructText1
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Thank you for participating in our survey!

        This survey requires some audio to be played, so please ensure you have a working speaker or headphones connected to your computer.

        You can adjust the volume to a comfortable level on the next page.

        Press “space” to continue.
    KeyboardComponent keyEndingOpening1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine volumeAdjust
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        endingAdjust.keys == ''

        volumeText.alignText = 'left'
      Each Frame:
        # control whether to quit the survey
        if endingAdjust.keys == 'escape':
            saveData(thisExp=thisExp)
            core.quit()
    TextComponent volumeText
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        There should be an audio sample playing right now.
        Please adjust the volume of your headphones or speaker to a comfortable value.

        If your device is not playing any sounds, ensure it is fully connected to your computer. If it still does not work, you will not be able to complete the survey.

        Please press "space" to continue, or press “Esc” if your audio is not working to quit the survey.
    KeyboardComponent endingAdjust
      allowedKeys = 'space', 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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    SoundComponent testingSound
      sound = audio/Narrative13Situation1.wav
      startVal [time (s)] = 0.5
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  Routine opening2
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    CodeComponent initializing2
      Code Type = Auto->JS
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      Begin Routine:
        instructText.alignText = 'left'

        instruction = instructMes[nInstruct]
        scaleImage = scaleImg[nInstruct]
        procedureImage = procedureImg[nInstruct]

        # showing the scale only at the fourth frame (about the two ratings)
        if nInstruct >= 1:
            illustrationProcedure.setOpacity(1)
        else:
            illustrationProcedure.setOpacity(0)

        if nInstruct >=1 and nInstruct <= 2:
            illustrationScale.setOpacity(1)
        else:
            illustrationScale.setOpacity(0)

        if nInstruct == 3:
            instructText.setPos([0.0, -0.2])
        else:
            instructText.setPos([0.0, -0.03])
      End Routine:
        if keyEndingOpening.keys == 'space':
            nInstruct = nInstruct + 1
        elif keyEndingOpening.keys == 'p':
            nInstruct = nInstruct - 1

        if nInstruct < 0:
            nInstruct = 0

        if nInstruct == 5:
            instructionLoop.finished = True
    ResourceManagerComponent resourceLoad_runs78
      actionType = Start and Check
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['audio/Narrative5Situation1.mp3', 'audio/Narrative5Situation2.mp3', 'audio/Narrative5Situation3.mp3', 'audio/Narrative5Situation4.mp3', 'audio/Narrative5Situation5.mp3', 'audio/Narrative5Situation6.mp3', 'audio/Narrative5Situation7.mp3', 'audio/Narrative5Situation8.mp3', 'audio/Narrative5Situation9.mp3']
      startVal [time (s)] = 0
    TextComponent instructText
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
      wrapWidth = 1.4
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    KeyboardComponent keyEndingOpening
      allowedKeys = 'space', 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent illustrationProcedure
      image [set every repeat] = $procedureImage
      opacity = 0
      pos = (0, 0.675)
      size = (1.6, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent illustrationScale
      image [set every repeat] = $scaleImage
      opacity = 0
      pos = (0, -0.7)
      size = (1.2, 0.5)
      startVal [time (s)] = 0.0
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  Routine fixation
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # for test, if you omit audio runs
        #conditions1_1 = 1
        #conditions1_2 = 2
        #conditions2_1 = 3
        #conditions2_2 = 4

        #dur1_1 = 1
        #dur1_2 = 2
        #dur2_1 = 3
        #dur2_2 = 4
      Begin Routine:
        # the first trial is for practicing
        # determine whether to present a fixation cross or instructions
        # only practice at the first run

        if nAudioRun == 1:
            if nTrial == 0:
                isiText = "+"
                continuousQExp = continuousQFull
            if nTrial == 1:
                isiText = "You have completed the practice. Now please press space to go on to the formal survey."
                continuousQExp = ""
            elif nTrial == 10:
                isiText = "New Story"
            else:
                isiText = "+"
        else:
            print(nAudioRun)
            print(nTrial)
            if nTrial == 0:
                isiText = "+"
                print(nAudioRun)
                print(nTrial)
            elif nTrial == 10:
                isiText = "New Story"
            else:
                isiText = "+"
        nTrial = nTrial + 1

        # select a trial sequence based on sub ID
        if parID%2 == 0 and nAudioRun == 1:
            audioFile = conditions1_1
            fixDur = dur1_1
        elif parID%2 == 1 and nAudioRun == 1:
            audioFile = conditions2_1
            fixDur = dur2_1
        elif parID%2 == 0 and nAudioRun == 2:
            audioFile = conditions1_2
            fixDur = dur1_2
        elif parID%2 == 1 and nAudioRun == 2:
            audioFile = conditions2_2
            fixDur = dur2_2

        tFixationStart = tThisFlipGlobal
      Each Frame:
        if nAudioRun == 2 and nTrial == 1:
            continueRoutine = False

        # wait for key press only after practice
        if not (nAudioRun == 1 and nTrial == 2):
            if tThisFlipGlobal >= tFixationStart + fixDur:
                continueRoutine = False
    TextComponent fixISI
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $isiText
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    KeyboardComponent endPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audioPre
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        slider_decimals = 1
        slideSpeed = 12
        oldRating = 50
        slider_width = 1
        slider_height = .05
        slider_orientation = 0
        #Failing to set ticks or labels in code
        slider_granularity = .1
        # the global time when audio finishes
        tAudioStopped = 0

        ###############
        # there seems to be a sampling mismatch between the audio playing device and the audio
        # the sound is sampling weird
        # but wait to see whether the online study went well
        ###############
      Begin Routine:
        # frame counter
        thisFrame = 0

        # create an empty list to store data
        slider_data=[]

        # set start position of the slider to the mid point
        continuousSlider.markerPos = 50

        # record the current position of the mouse
        mouseRec=mouse.getPos()

        # a boolean value to make sure we only store one time point of the audio to stopping
        audioStopped = False

        # a boolean value to indicate whether there has been valid slider data
        mouseInSlider = False
      Each Frame:
        if nAudioRun == 2 and nTrial == 1:
            continueRoutine = False

        if (not slider_shape.contains(mouse)) and (not mouseInSlider):
            if thisFrame%slideSpeed==0:
                slider_data.append([999,int(t*1000)])

        if slider_shape.contains(mouse) and (not mouseInSlider):
            mouseInSlider = True

        if slider_shape.contains(mouse) and mouseInSlider:
            if mouse.getPos()[slider_orientation] != mouseRec[slider_orientation]:
                mouseRec = mouse.getPos()
                continuousSlider.markerPos = mouseRec[slider_orientation]/slider_width*100+100/2
                # update oldRatings if
            if continuousSlider.markerPos:
                if oldRating != continuousSlider.markerPos:
                    oldRating = continuousSlider.markerPos
            if continuousSlider.markerPos and thisFrame%slideSpeed==0:
                slider_data.append([round(oldRating,slider_decimals),int(t*1000)])

        thisFrame = thisFrame + 1

        # Force ending the routine after 0.1s of the audio finished
        if audios.status == FINISHED and not audioStopped:
            tAudioStopped = tThisFlipGlobal
            #thisExp.addData('audios.ended', tAudioStopped)
            audioStopped = True
        if audios.status == FINISHED and tThisFlipGlobal >= 0.1+tAudioStopped-frameTolerance:
            continueRoutine = False
      End Routine:
        thisExp.addData('continuousResponses_audio',slider_data)
        #thisExp.addData('Final Response',round(slider.markerPos,slider.decimals))
    SoundComponent audios
      sound [set every repeat] = $audioFile
      startVal [time (s)] = 0.3
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    TextComponent fixAudio
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    PolygonComponent slider_shape
      fillColor = white
      opacity = 0
      pos = (0, -0.35)
      shape = rectangle
      size = (1.5, 0.15)
      startVal [time (s)] = 0.0
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    SliderComponent continuousSlider
      color = 1.0000, 1.0000, 1.0000
      fillColor = 0.2157, 0.4118, 0.6706
      forceEndRoutine = False
      granularity = 0
      labels = label1, label2, label3
      letterHeight = 0.07
      pos = (0, -0.35)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,50,100)
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    TextComponent questionText
      font = Calibri
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continuousQ
      wrapWidth = 1.4
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    KeyboardComponent keyForTest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent questionExplanation
      font = Calibri
      letterHeight = 0.07
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continuousQExp
      wrapWidth = 1.8
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  Routine runIntervalBreak
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        nAudioRun = nAudioRun + 1
    TextComponent breakText_audio
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      wrapWidth = 1.4
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      text:
        Now you can break for a while (at most 1 minute).

        Please press space to continue when you feel ready for the next part.
    KeyboardComponent endingBreakKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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  Routine readyForAudio
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        nTrial = 0    # the number of trials already completed

        catchQ_presented = False    # whether the catch question has been presented in this run
    TextComponent readyText_audio
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.58
      text = Please get ready for listening to and rating the narratives.
      wrapWidth = 1.4
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  Routine ratingSuffering
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        sufferingText.alignText = 'left'
    TextComponent sufferingText
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        In the last part of the story, was there any character suffering from something, either physically (like getting injured) or emotionally (like being cheated)?

        To answer, press "y" on your keyboard for "yes", or "n" for "no".
    KeyboardComponent ratingSufferingResp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine connection
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        connectionInstruct.alignText = 'left'
        nAudioRun = 1
    TextComponent connectionInstruct
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        For the next portion, you will read the narratives on the screen instead of hearing them. You will answer the same types of questions as you did for the previous narratives. Please read carefully, because the narratives will not stop playing and there is no opportunity to read the same part twice. As before, the first part of narrative is for you to practice.
        Press "space" to begin.
    KeyboardComponent connectionEnding
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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  Routine readyForText
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        nTrial = 0    # the number of trials already completed

        catchQ_presented = False    # whether the catch question has been presented in this run
    TextComponent readyText_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.58
      text = Please get ready for reading and rating the narratives.
      wrapWidth = 1.4
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  Routine textPre
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # select a trial sequence based on sub ID
        if parID%2 == 0 and nTextRun == 1:
            textToPre = text1_1
        elif parID%2 == 1 and nTextRun == 1:
            textToPre = text2_1
        elif parID%2 == 0 and nTextRun == 2:
            textToPre = text1_2
        elif parID%2 == 1 and nTextRun == 2:
            textToPre = text2_2
        textToPre = textToPre.split()
        nWords = len(textToPre)
        nScreens = int((nWords-1)/10)+1    # number of screens needed
        currentScreen = 0    # which screen we are at now

        # get the time for the first flip
        tChange = tThisFlipGlobal + 3.34   # add 7 ms lag
        startWord = 0    # location of the first word to present
        textsOnScreen = " ".join(textToPre[startWord:startWord+10])
        tEnd = 9999999999999999999    # time to end

        # monitor whether each screen has been reset
        resetBool = []
        for i in range(nScreens+1):
            resetBool.append(0)
        resetBool[currentScreen] = 1
        currentScreen = currentScreen + 1

        # frame counter
        thisFrame = 0

        # create an empty list to store data
        slider_data=[]

        # set start position of the slider to the mid point
        continuousSlider_2.markerPos = 50

        # record the current position of the mouse
        mouseRec=mouse.getPos()

        mouseInSlider = False
      Each Frame:
        if (not slider_shape_2.contains(mouse)) and (not mouseInSlider):
            if thisFrame%slideSpeed==0:
                slider_data.append([999,int(t*1000)])

        if slider_shape_2.contains(mouse) and (not mouseInSlider):
            mouseInSlider = True

        if slider_shape_2.contains(mouse) and mouseInSlider:
            if mouse.getPos()[slider_orientation] != mouseRec[slider_orientation]:
                mouseRec = mouse.getPos()
                continuousSlider_2.markerPos = mouseRec[slider_orientation]/slider_width*100+100/2
            if continuousSlider_2.markerPos:
                if oldRating != continuousSlider_2.markerPos:
                    oldRating = continuousSlider_2.markerPos
            if continuousSlider_2.markerPos and thisFrame%slideSpeed==0:
                slider_data.append([round(oldRating,slider_decimals),int(t*1000)])

        thisFrame = thisFrame + 1

        # present at most 10 words per screen, at the speed of 3 words/s
        if tThisFlipGlobal >= tChange-frameTolerance and not resetBool[currentScreen]:
            # this is time for resetting, but was not reset yet
            resetBool[currentScreen] = 1
            currentScreen = currentScreen + 1
            startWord = startWord+10
            if startWord+10 < nWords:
                tChange = tThisFlipGlobal + 10/3
                textsOnScreen = " ".join(textToPre[startWord:startWord+10])
            else:
                tChange = 99999999999999
                tEnd = tThisFlipGlobal + (nWords-startWord)/3 + 1.5    # end this run
                textsOnScreen = " ".join(textToPre[startWord:])

        # end this run when every screen has been shown
        if tThisFlipGlobal >= tEnd-frameTolerance:
            continueRoutine = False
      End Routine:
        thisExp.addData('continuousResponses_text',slider_data)
        #thisExp.addData('Final Response',round(slider.markerPos,slider.decimals))
    TextComponent texts
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $textsOnScreen
      wrapWidth = 1.9
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    PolygonComponent slider_shape_2
      fillColor = white
      opacity = 0
      pos = (0, -0.35)
      shape = rectangle
      size = (1.5, 0.15)
      startVal [time (s)] = 0.0
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    SliderComponent continuousSlider_2
      color = 1.0000, 1.0000, 1.0000
      fillColor = 0.2157, 0.4118, 0.6706
      forceEndRoutine = False
      granularity = 0
      labels = label1, label2, label3
      letterHeight = 0.07
      pos = (0, -0.35)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,50,100)
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    TextComponent questionText_2
      font = Calibri
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continuousQ
      wrapWidth = 1.4
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    KeyboardComponent keyForTest_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent questionExplanation_2
      font = Calibri
      letterHeight = 0.07
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continuousQExp
      wrapWidth = 1.8
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  Routine runBreakText
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        nTextRun = nTextRun + 1
        nAudioRun = nAudioRun + 1
      Each Frame:
        if nTextRun == 3:    # the last run
            continueRoutine = False
    TextComponent breakText_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      wrapWidth = 1.4
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      text:
        Now you can break for a while (at most 1 minute).

        Please press space to continue when you feel ready for the next part.
    KeyboardComponent endingBreakKey_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 60
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  Routine ending
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        endingText.alignText = 'left'
    TextComponent endingText
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Congratulations! You have completed the whole survey.

        Thank you very much for your participation! You will receive your reimbursement for this within a week.

        Press "space" to end and quit.
    KeyboardComponent endingEnding
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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  Routine intRating
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    CodeComponent end_this_question
      Code Type = Auto->JS
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      Begin Routine:
        confirmResponse.keys = ""

        # the slider object does not have a method to reset the labels
        # so to do that, create a new object to override the previous one
        #newQuestionsSlider = visual.Slider(win=win, name='newQuestionsSlider',
        #    startValue=None, size=(1.0, 0.1), pos=(0, -0.2), units=win.units,
        #    labels=[label1, label2, label3], ticks=(0, 50, 100), granularity=0,
        #    style=['rating'], styleTweaks=(), opacity=1,
        #    labelColor='white', markerColor='Red', lineColor='White', colorSpace='rgb',
        #    font='Arial', labelHeight=0.07,
        #    flip=False, ori=0, depth=-2, readOnly=False)
      Each Frame:
        if nAudioRun == 2 and nTrial == 1:
            continueRoutine = False

        # end the routine when there is a rating and the space is pressed
        if intQuestionSlider.history != [] and confirmResponse.keys == "space":
            continueRoutine = False
    TextComponent intQuestionText
      font = Calibri
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $intQ
      wrapWidth = 1.4
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    SliderComponent intQuestionSlider
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = label1, label2, label3
      letterHeight = 0.07
      pos = (0, -0.35)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 50, 100)
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    TextComponent reminderText
      font = Calibri
      letterHeight = 0.07
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Use your mouse to click the position where you think can best answer the question. Then press space to confirm and continue.
      wrapWidth = 1.5
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    KeyboardComponent confirmResponse
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
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  Routine catchQuestion
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    CodeComponent end_this_question_2
      Code Type = JS
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      Begin JS Routine:
        if (((nAudioRun === 2) && (nTrial === 1))) {
            continueRoutine = false;
        }
        confirmResponse_2.keys = "";
        random_number = Math.random.randint(1, 15);
        if ((((random_number === 1) && (! catchQ_presented)) || ((nTrial === 19) && (! catchQ_presented)))) {
            catchQ_presented = true;
            if ((nTrial === 1)) {
                catchQ_presented = false;
            }
        } else {
            continueRoutine = false;
        }
        random_number_2 = Math.random.randint(1, 3);
        if ((random_number_2 === 1)) {
            catchQ = (("Please give a rating around " + label1) + " for this question.");
            psychoJS.experiment.addData("catch_label", label1);
            psychoJS.experiment.addData("catch_value", 0);
        } else {
            if ((random_number_2 === 2)) {
                catchQ = (("Please give a rating around " + label2) + " for this question.");
                psychoJS.experiment.addData("catch_label", label2);
                psychoJS.experiment.addData("catch_value", 50);
            } else {
                if ((random_number_2 === 3)) {
                    catchQ = (("Please give a rating around " + label3) + " for this question.");
                    psychoJS.experiment.addData("catch_label", label3);
                    psychoJS.experiment.addData("catch_value", 100);
                }
            }
        }
      Each JS Frame:
        if (((catchQuestionSlider.history !== []) && (confirmResponse_2.keys === "space"))) {
            continueRoutine = false;
        }
    TextComponent catchQuestionText
      font = Calibri
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchQ
      wrapWidth = 1.4
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    SliderComponent catchQuestionSlider
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = label1, label2, label3
      letterHeight = 0.07
      pos = (0, -0.35)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['rating']
      ticks = (0, 50, 100)
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    TextComponent reminderText_2
      font = Calibri
      letterHeight = 0.07
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *Use your mouse to click the position where you think can best answer the question. Then press space to confirm and continue.
      wrapWidth = 1.5
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    KeyboardComponent confirmResponse_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
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  Routine consent
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    ImageComponent consentImage
      image = image/consent.png
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent consentResponse
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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Flow
  Routine consent
  Routine opening1
  Routine volumeAdjust
  LoopInitiator instructionLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 999
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    Routine opening2
  LoopTerminator instructionLoop
  LoopInitiator audioLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine readyForAudio
    LoopInitiator audioRunLoop loopType="TrialHandler"
      conditionsFile = audioRunLoop_condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'conditions1_1': 'audio/Narrative13Situation2.wav', 'conditions2_1': 'audio/Narrative13Situation2.wav', 'conditions1_2': 'audio/Narrative13Situation2.wav', 'conditions2_2': 'audio/Narrative13Situation2.wav', 'dur1_1': 2, 'dur2_1': 2, 'dur1_2': 2, 'dur2_2': 2},
        {'conditions1_1': 'audio/Narrative7Situation1.wav', 'conditions2_1': 'audio/Narrative8Situation1.wav', 'conditions1_2': 'audio/Narrative5Situation1.wav', 'conditions2_2': 'audio/Narrative6Situation1.wav', 'dur1_1': 2, 'dur2_1': 5, 'dur1_2': 5, 'dur2_2': 2},
        {'conditions1_1': 'audio/Narrative7Situation2.wav', 'conditions2_1': 'audio/Narrative8Situation2.wav', 'conditions1_2': 'audio/Narrative5Situation2.wav', 'conditions2_2': 'audio/Narrative6Situation2.wav', 'dur1_1': 3, 'dur2_1': 3, 'dur1_2': 3, 'dur2_2': 3},
        {'conditions1_1': 'audio/Narrative7Situation3.wav', 'conditions2_1': 'audio/Narrative8Situation3.wav', 'conditions1_2': 'audio/Narrative5Situation3.wav', 'conditions2_2': 'audio/Narrative6Situation3.wav', 'dur1_1': 8, 'dur2_1': 4, 'dur1_2': 3, 'dur2_2': 5},
        {'conditions1_1': 'audio/Narrative7Situation4.wav', 'conditions2_1': 'audio/Narrative8Situation4.wav', 'conditions1_2': 'audio/Narrative5Situation4.wav', 'conditions2_2': 'audio/Narrative6Situation4.wav', 'dur1_1': 3, 'dur2_1': 3, 'dur1_2': 1, 'dur2_2': 2}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
      Routine fixation
      Routine audioPre
      Routine intRating
      Routine catchQuestion
    LoopTerminator audioRunLoop
    Routine runIntervalBreak
  LoopTerminator audioLoop
  Routine connection
  LoopInitiator textLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine readyForText
    LoopInitiator textRunLoop loopType="TrialHandler"
      conditionsFile = textRunLoop_condition.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'text1_1': 'Larry had recently lost his family, job and home, and was now living on his own in the park. He had most of his belongings, including some clothes, a blanket, and his mother’s special necklace. His family had been very important to him and he felt as though he did not have much going for him. One of his first days in the park he came across a family that did not have much food and looked very cold. He decided to give them some of his food and his blanket.', 'text1_2': 'Larry had recently lost his family, job and home, and was now living on his own in the park. He had most of his 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,
        {'text1_1': "It was just another Sunday afternoon for Lucy, she was on her way to the farmer's market to pick up some produce. When she arrived at the old train depot that housed the market, she noticed two men fighting on the steps. Before she could call for help, one of the men crumpled to his knees. The other man dropped an object that appeared to be a knife and ran off. When Lucy approached the crime scene she realized that the man who had been murdered was the Mayor and that he had a gunshot wound.", 'text1_2': 'One day at work, Margaret walked up to her partner, Al, to ask him to talk to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,
        {'text1_1': 'On the ground beside him was a pen that she had mistaken for a knife. Lucy looked for the gunman and saw a suspicious man in black with distinct pointy features darting into an alley across the street. Cops who were nearby chased the man who had fled and arrested him.', 'text1_2': "While waiting outside the chief of staff's office, Al heard nondescript shouting and yelling, there was a loud clatter in the room and then an eerie silence. An unfamiliar employee ran hastily out of the office with a terrified look on their face.", 'text2_1': "Suddenly, Luke heard a woman call out his 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,
        {'text1_1': 'But Lucy knew the charged man was innocent, which meant the killer was free. Lucy vowed to find out who the real murderer was and to stop him at all costs.', 'text1_2': 'Al explained to the chief of staff that Margaret wanted to be excused from her absences last week. The chief of staff, Susan, revealed that she wanted to fire Margaret and never see her again. Susan and Al had been having an affair and she wanted Margaret "out of the picture". Al was conflicted, but agreed it would be for the best.', 'text2_1': 'Luke thought of his child and felt like this was his only option. He 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
      Routine fixation
      Routine textPre
      Routine catchQuestion
      Routine intRating
    LoopTerminator textRunLoop
    Routine runBreakText
  LoopTerminator textLoop
  Routine ending
